def model my_model as
  // BG CVS model extended to include liver, stomach, spleen, pancreas, intestines, colon, brain, limbs and muscle in torso
  def unit dim as
    unit dimensionless;
  enddef;
  def unit per_s as
    unit second {expo: -1};
  enddef;
  def unit L_per_s as
    unit litre;
    unit second {expo: -1};
  enddef;
  def unit kPa as
    unit joule;
    unit litre {expo: -1};
  enddef;
  def unit L_per_s_per_kPa as
    unit L_per_s;
    unit kPa {expo: -1};
  enddef;
  def unit kPa_per_L as
    unit kPa;
    unit litre {expo: -1};
  enddef;
  def unit kPa_s_per_L as
    unit kPa;
    unit L_per_s {expo: -1};
  enddef;
  def unit Js2_per_m5 as
    unit joule;
    unit second {expo: 2};
    unit meter {expo: -5};
  enddef;
  def unit m_per_s2 as
    unit meter;
    unit second {expo: -2};
  enddef;

  def comp main as
    var t: second;
    var rho: Js2_per_m5 {init: 1e3};
    var g: m_per_s2 {init: 9.81};
    var theta_deg: dim {init: 90};
    var theta_rad: radian;
    theta_rad = theta_deg*pi/180{dim};
    var z: dim;
    z = sel
      case (t > 100{second}) and (t < 101{second}):
        1{dim};
      otherwise:
        0{dim};
    endsel;
    // Triangular waveform mt with period T. Triangular waveform delayed by a constant is mta
    var T: second {init: 1};
    var mt: dim;
    var mta: dim;
    var delay: dim {init: 0.1};
    var To_pk: dim {init: 0.1};
    mt = t/T-floor(t/T);
    mta = t/T-delay-floor((t-delay*T)/T);
    // Left ventricle
    var E_B_LV: kPa_per_L;
    var E_B_LVmax: kPa_per_L {init: 320};
    var E_B_LVmin: kPa_per_L {init: 6.667};
    var q_B_LV: litre {init: 1};
    var q_B_LV_us: litre {init: 0.005};
    var u_B_LV: kPa;
    E_B_LV = sel
      case mt < 0.4{dim}:
        (E_B_LVmax-E_B_LVmin)*mt/To_pk*exp(0.5{dim}*(1{dim}-sqr(mt/To_pk)))+E_B_LVmin;
      case mt < 0.6{dim}:
        (E_B_LVmax-E_B_LVmin)*0.4{dim}/To_pk*exp(0.5{dim}*(1{dim}-sqr(0.4{dim}/To_pk)))+E_B_LVmin;
      otherwise:
        E_B_LVmin;
    endsel;
    ode(q_B_LV, t) = v_B_MV-v_B_AV;
    u_B_LV = E_B_LV*(q_B_LV-q_B_LV_us);
    // Right ventricle
    var E_B_RV: kPa_per_L;
    var E_B_RVmax: kPa_per_L {init: 70};
    var E_B_RVmin: kPa_per_L {init: 2};
    var q_B_RV: litre {init: 0.2};
    var q_B_RV_us: litre {init: 0.01};
    var u_B_RV: kPa;
    E_B_RV = sel
      case mt < 0.4{dim}:
        (E_B_RVmax-E_B_RVmin)*mt/To_pk*exp(0.5{dim}*(1{dim}-sqr(mt/To_pk)))+E_B_RVmin;
      case mt < 0.6{dim}:
        (E_B_RVmax-E_B_RVmin)*0.4{dim}/To_pk*exp(0.5{dim}*(1{dim}-sqr(0.4{dim}/To_pk)))+E_B_RVmin;
      otherwise:
        E_B_RVmin;
    endsel;
    ode(q_B_RV, t) = v_B_TV-v_B_PV;
    u_B_RV = E_B_RV*(q_B_RV-q_B_RV_us);
    // Left atrium
    var E_B_LA: kPa_per_L {init: 10};
    var q_B_LA: litre {init: 0.02};
    var q_B_LA_us: litre {init: 0.004};
    var u_B_LA: kPa;
    ode(q_B_LA, t) = v_B_pulmVein-v_B_MV;
    u_B_LA = E_B_LA*(q_B_LA-q_B_LA_us);
    // Right atrium
    var E_B_RA: kPa_per_L {init: 10};
    var q_B_RA: litre {init: 0.02};
    var q_B_RA_us: litre {init: 0.004};
    var u_B_RA: kPa;
    ode(q_B_RA, t) = v_B_brain3+v_B_liver2+v_B_lRenal3+v_B_rRenal3+v_B_musTorso3+v_B_lArm3+v_B_rArm3+v_B_lLeg3+v_B_rLeg3-v_B_TV;
    u_B_RA = E_B_RA*(q_B_RA-q_B_RA_us);
    // Aortic valve
    var R_B_AV: kPa_s_per_L {init: 1};
    var v_B_AV: L_per_s;
    v_B_AV = sel
      case u_B_LV > u_B_AA:
        (u_B_LV-u_B_AA)/R_B_AV;
      otherwise:
        0{L_per_s};
    endsel;
    // Pulmonary Valve
    var R_B_PV: kPa_s_per_L {init: 1};
    var v_B_PV: L_per_s;
    v_B_PV = sel
      case u_B_RV > u_B_PA:
        (u_B_RV-u_B_PA)/R_B_PV;
      otherwise:
        0{L_per_s};
    endsel;
    // Tricuspid Valve
    var R_B_TV: kPa_s_per_L {init: 1};
    var v_B_TV: L_per_s;
    v_B_TV = sel
      case u_B_RA > u_B_RV:
        (u_B_RA-u_B_RV)/R_B_TV;
      otherwise:
        0{L_per_s};
    endsel;
    // Mitral Valve
    var R_B_MV: kPa_s_per_L {init: 1};
    var v_B_MV: L_per_s;
    v_B_MV = sel
      case u_B_LA > u_B_LV:
        (u_B_LA-u_B_LV)/R_B_MV;
      otherwise:
        0{L_per_s};
    endsel;
    // Pulmonary artery
    var q_B_PA: litre {init: 0.3};
    var q_B_PA_us: litre {init: 0.2};
    var u_B_PA: kPa;
    var E_B_PA: kPa_per_L {init: 200};
    ode(q_B_PA, t) = v_B_PV-v_B_lung1;
    u_B_PA = E_B_PA*(q_B_PA-q_B_PA_us);
    // Lungs
    var q_B_lung: litre {init: 0.2};
    var q_B_lung_us: litre {init: 0.1};
    var u_B_lung: kPa;
    var E_B_lung: kPa_per_L {init: 100};
    var z_lung: meter {init: 0.20};
    ode(q_B_lung, t) = v_B_lung1-v_B_lung2;
    u_B_lung = E_B_lung*(q_B_lung-q_B_lung_us)-rho*g*z_lung*cos(theta_rad);
    var v_B_lung1: L_per_s;
    var v_B_lung2: L_per_s;
    var R_B_lung1: kPa_s_per_L {init: 3};
    var R_B_lung2: kPa_s_per_L {init: 10};
    v_B_lung1 = (u_B_PA-u_B_lung)/R_B_lung1;
    v_B_lung2 = (u_B_lung-u_B_pulmVein)/R_B_lung2;
    // Pulmonary vein
    var E_B_pulmVein: kPa_per_L {init: 20};
    var q_B_pulmVein: litre {init: 0.02};
    var q_B_pulmVein_us: litre {init: 0.012};
    var u_B_pulmVein: kPa;
    ode(q_B_pulmVein, t) = v_B_lung2-v_B_pulmVein;
    u_B_pulmVein = E_B_pulmVein*(q_B_pulmVein-q_B_pulmVein_us);
    var v_B_pulmVein: L_per_s;
    var R_B_pulmVein: kPa_s_per_L {init: 1};
    v_B_pulmVein = (u_B_pulmVein-u_B_LA)/R_B_pulmVein;
    // Brain
    var q_B_brain: litre {init: 0.1};
    var q_B_brain_us: litre {init: 0.06};
    var q_B_brainVein: litre {init: 0.1};
    var q_B_brainVein_us: litre {init: 0.06};
    var u_B_brain: kPa;
    var u_B_brainVein: kPa;
    var E_B_brain: kPa_per_L {init: 20};
    var E_B_brainVein: kPa_per_L {init: 20};
    ode(q_B_brain, t) = v_B_brain1-v_B_brain2;
    u_B_brain = E_B_brain*(q_B_brain-q_B_brain_us);
    ode(q_B_brainVein, t) = v_B_brain2-v_B_brain3;
    u_B_brainVein = E_B_brainVein*(q_B_brainVein-q_B_brainVein_us);
    var v_B_brain1: L_per_s;
    var v_B_brain2: L_per_s;
    var v_B_brain3: L_per_s;
    var R_B_brain1: kPa_s_per_L {init: 100};
    var R_B_brain2: kPa_s_per_L {init: 600};
    var R_B_brain3: kPa_s_per_L {init: 1};
    v_B_brain1 = (u_B_AA-u_B_brain)/R_B_brain1;
    v_B_brain2 = (u_B_brain-u_B_brainVein)/R_B_brain2;
    v_B_brain3 = (u_B_brainVein-u_B_RA)/R_B_brain3;
    // Ascending aorta
    var q_B_AA: litre {init: 0.2};
    var q_B_AA_us: litre {init: 0.12};
    var u_B_AA: kPa;
    var E_B_AA: kPa_per_L {init: 80};
    ode(q_B_AA, t) = v_B_AV-v_B_brain1-v_B_celiac-v_B_supMes-v_B_infMes-v_B_lRenal1-v_B_rRenal1-v_B_musTorso1-v_B_lArm1-v_B_rArm1-v_B_lLeg1-v_B_rLeg1;
    u_B_AA = E_B_AA*(q_B_AA-q_B_AA_us);
    // Celiac branch of the aorta
    var q_B_celiac: litre {init: 0.1};
    var q_B_celiac_us: litre {init: 0.06};
    var u_B_celiac: kPa;
    var E_B_celiac: kPa_per_L {init: 400};
    var z_celiac: meter {init: 0.20};
    ode(q_B_celiac, t) = v_B_celiac-v_B_liver1-v_B_stomach1-v_B_spleen1-v_B_pancreas1;
    u_B_celiac = E_B_celiac*(q_B_celiac-q_B_celiac_us)-rho*g*z_celiac*cos(theta_rad);
    var v_B_celiac: L_per_s;
    var R_B_celiac: kPa_s_per_L {init: 100};
    v_B_celiac = (u_B_AA-u_B_celiac)/R_B_celiac;
    // Superior mesentery branch of the aorta
    var q_B_supMes: litre {init: 0.1};
    var q_B_supMes_us: litre {init: 0.06};
    var u_B_supMes: kPa;
    var E_B_supMes: kPa_per_L {init: 400};
    var z_supMes: meter {init: 0.20};
    ode(q_B_supMes, t) = v_B_supMes-v_B_pancreas2-v_B_intestine1-v_B_colon1;
    u_B_supMes = E_B_supMes*(q_B_supMes-q_B_supMes_us)-rho*g*z_supMes*cos(theta_rad);
    var v_B_supMes: L_per_s;
    var R_B_supMes: kPa_s_per_L {init: 100};
    v_B_supMes = (u_B_AA-u_B_supMes)/R_B_supMes;
    // Inferior mesentery branch of the aorta
    var v_B_infMes: L_per_s;
    var R_B_infMes: kPa_s_per_L {init: 100};
    v_B_infMes = (u_B_AA-u_B_colon)/R_B_infMes;
    // Stomach
    var q_B_stomach: litre {init: 0.1};
    var q_B_stomach_us: litre {init: 0.06};
    var u_B_stomach: kPa;
    var E_B_stomach: kPa_per_L {init: 100};
    var z_stomach: meter {init: 0.20};
    ode(q_B_stomach, t) = v_B_stomach1-v_B_stomach2;
    u_B_stomach = E_B_stomach*(q_B_stomach-q_B_stomach_us)-rho*g*z_stomach*cos(theta_rad);
    var v_B_stomach1: L_per_s;
    var v_B_stomach2: L_per_s;
    var R_B_stomach1: kPa_s_per_L {init: 100};
    var R_B_stomach2: kPa_s_per_L {init: 2400};
    v_B_stomach1 = (u_B_celiac-u_B_stomach)/R_B_stomach1;
    v_B_stomach2 = (u_B_stomach-u_B_portalVein)/R_B_stomach2;
    // Spleen
    var q_B_spleen: litre {init: 0.1};
    var q_B_spleen_us: litre {init: 0.06};
    var u_B_spleen: kPa;
    var E_B_spleen: kPa_per_L {init: 100};
    var z_spleen: meter {init: 0.20};
    ode(q_B_spleen, t) = v_B_spleen1-v_B_spleen2;
    u_B_spleen = E_B_colon*(q_B_spleen-q_B_spleen_us)-rho*g*z_spleen*cos(theta_rad);
    var v_B_spleen1: L_per_s;
    var v_B_spleen2: L_per_s;
    var R_B_spleen1: kPa_s_per_L {init: 100};
    var R_B_spleen2: kPa_s_per_L {init: 3000};
    v_B_spleen1 = (u_B_celiac-u_B_spleen)/R_B_spleen1;
    v_B_spleen2 = (u_B_spleen-u_B_portalVein)/R_B_spleen2;
    // Pancreas
    var q_B_pancreas: litre {init: 0.1};
    var q_B_pancreas_us: litre {init: 0.06};
    var u_B_pancreas: kPa;
    var E_B_pancreas: kPa_per_L {init: 100};
    var z_pancreas: meter {init: 0.20};
    ode(q_B_pancreas, t) = v_B_pancreas1+v_B_pancreas2-v_B_pancreas3;
    u_B_pancreas = E_B_pancreas*(q_B_pancreas-q_B_pancreas_us)-rho*g*z_pancreas*cos(theta_rad);
    var v_B_pancreas1: L_per_s;
    var v_B_pancreas2: L_per_s;
    var v_B_pancreas3: L_per_s;
    var R_B_pancreas1: kPa_s_per_L {init: 100};
    var R_B_pancreas2: kPa_s_per_L {init: 100};
    var R_B_pancreas3: kPa_s_per_L {init: 4000};
    v_B_pancreas1 = (u_B_celiac-u_B_pancreas)/R_B_pancreas1;
    v_B_pancreas2 = (u_B_supMes-u_B_pancreas)/R_B_pancreas2;
    v_B_pancreas3 = (u_B_pancreas-u_B_portalVein)/R_B_pancreas3;
    // Intestine
    var q_B_intestine: litre {init: 0.1};
    var q_B_intestine_us: litre {init: 0.06};
    var u_B_intestine: kPa;
    var E_B_intestine: kPa_per_L {init: 100};
    var z_: meter {init: 0.20};
    ode(q_B_intestine, t) = v_B_intestine1-v_B_intestine2;
    u_B_intestine = E_B_intestine*(q_B_intestine-q_B_intestine_us);
    var v_B_intestine1: L_per_s;
    var v_B_intestine2: L_per_s;
    var R_B_intestine1: kPa_s_per_L {init: 100};
    var R_B_intestine2: kPa_s_per_L {init: 1200};
    v_B_intestine1 = (u_B_supMes-u_B_intestine)/R_B_intestine1;
    v_B_intestine2 = (u_B_intestine-u_B_portalVein)/R_B_intestine2;
    // Colon
    var q_B_colon: litre {init: 0.1};
    var q_B_colon_us: litre {init: 0.06};
    var u_B_colon: kPa;
    var E_B_colon: kPa_per_L {init: 100};
    var z_colon: meter {init: 0.20};
    ode(q_B_colon, t) = v_B_colon1+v_B_infMes-v_B_colon2;
    u_B_colon = E_B_colon*(q_B_colon-q_B_colon_us)-rho*g*z_colon*cos(theta_rad);
    var v_B_colon1: L_per_s;
    var v_B_colon2: L_per_s;
    var R_B_colon1: kPa_s_per_L {init: 100};
    var R_B_colon2: kPa_s_per_L {init: 2000};
    v_B_colon1 = (u_B_supMes-u_B_colon)/R_B_colon1;
    v_B_colon2 = (u_B_colon-u_B_portalVein)/R_B_colon2;
    // Portal vein
    var q_B_portalVein: litre {init: 0.1};
    var q_B_portalVein_us: litre {init: 0.06};
    var u_B_portalVein: kPa;
    var E_B_portalVein: kPa_per_L {init: 50};
    var z_portalVein: meter {init: 0.20};
    ode(q_B_portalVein, t) = v_B_stomach2+v_B_spleen2+v_B_pancreas3+v_B_intestine2+v_B_colon2-v_B_portalVein;
    u_B_portalVein = E_B_portalVein*(q_B_portalVein-q_B_portalVein_us)-rho*g*z_portalVein*cos(theta_rad);
    var v_B_portalVein: L_per_s;
    var R_B_portalVein: kPa_s_per_L {init: 100};
    v_B_portalVein = (u_B_portalVein-u_B_liver)/R_B_portalVein;
    // Liver
    var q_B_liver: litre {init: 0.2};
    var q_B_liver_us: litre {init: 0.06};
    var u_B_liver: kPa;
    var E_B_liver: kPa_per_L {init: 10};
    var z_liver: meter {init: -0.50};
    ode(q_B_liver, t) = v_B_liver1+v_B_portalVein-v_B_liver2;
    u_B_liver = E_B_liver*(q_B_liver-q_B_liver_us)-rho*g*z_liver*cos(theta_rad);
    var v_B_liver1: L_per_s;
    var v_B_liver2: L_per_s;
    var R_B_liver1: kPa_s_per_L {init: 800};
    var R_B_liver2: kPa_s_per_L {init: 1};
    v_B_liver1 = (u_B_celiac-u_B_liver)/R_B_liver1;
    v_B_liver2 = (u_B_liver-u_B_RA)/R_B_liver2;
    // Kidneys. Renal 1 -> Glomerular bed (gCap) -> Renal 2 -> Peritubular bed (pCap) -> Renal 3
    var q_B_lGlomerulus: litre {init: 0.1};
    var q_B_rGlomerulus: litre {init: 0.1};
    var q_B_lPeritubular: litre {init: 0.1};
    var q_B_rPeritubular: litre {init: 0.1};
    var q_B_lGlomerulus_us: litre {init: 0.06};
    var q_B_rGlomerulus_us: litre {init: 0.06};
    var q_B_lPeritubular_us: litre {init: 0.06};
    var q_B_rPeritubular_us: litre {init: 0.06};
    var u_B_lGlomerulus: kPa;
    var u_B_rGlomerulus: kPa;
    var u_B_lPeritubular: kPa;
    var u_B_rPeritubular: kPa;
    var E_B_lGlomerulus: kPa_per_L {init: 150};
    var E_B_rGlomerulus: kPa_per_L {init: 150};
    var E_B_lPeritubular: kPa_per_L {init: 50};
    var E_B_rPeritubular: kPa_per_L {init: 50};
    var z_kidney: meter {init: -0.25};
    ode(q_B_lGlomerulus, t) = v_B_lRenal1-v_B_lRenal2;
    ode(q_B_rGlomerulus, t) = v_B_lRenal1-v_B_lRenal2;
    ode(q_B_lPeritubular, t) = v_B_lRenal2-v_B_lRenal3;
    ode(q_B_rPeritubular, t) = v_B_lRenal2-v_B_lRenal3;
    u_B_lGlomerulus = E_B_lGlomerulus*(q_B_lGlomerulus-q_B_lGlomerulus_us)-rho*g*z_kidney*cos(theta_rad);
    u_B_rGlomerulus = E_B_rGlomerulus*(q_B_rGlomerulus-q_B_rGlomerulus_us)-rho*g*z_kidney*cos(theta_rad);
    u_B_lPeritubular = E_B_lPeritubular*(q_B_lPeritubular-q_B_lPeritubular_us)-rho*g*z_kidney*cos(theta_rad);
    u_B_rPeritubular = E_B_rPeritubular*(q_B_rPeritubular-q_B_rPeritubular_us)-rho*g*z_kidney*cos(theta_rad);
    var v_B_lRenal1: L_per_s;
    var v_B_rRenal1: L_per_s;
    var v_B_lRenal2: L_per_s;
    var v_B_rRenal2: L_per_s;
    var v_B_lRenal3: L_per_s;
    var v_B_rRenal3: L_per_s;
    var R_B_lRenal1: kPa_s_per_L {init: 100};
    var R_B_rRenal1: kPa_s_per_L {init: 100};
    var R_B_lRenal2: kPa_s_per_L {init: 2000};
    var R_B_rRenal2: kPa_s_per_L {init: 2000};
    var R_B_lRenal3: kPa_s_per_L {init: 1};
    var R_B_rRenal3: kPa_s_per_L {init: 1};
    v_B_lRenal1 = (u_B_AA-u_B_lGlomerulus)/R_B_lRenal1;
    v_B_rRenal1 = (u_B_AA-u_B_rGlomerulus)/R_B_rRenal1;
    v_B_lRenal2 = (u_B_lGlomerulus-u_B_lPeritubular)/R_B_lRenal2;
    v_B_rRenal2 = (u_B_rGlomerulus-u_B_rPeritubular)/R_B_rRenal2;
    v_B_lRenal3 = (u_B_lPeritubular-u_B_RA)/R_B_lRenal3;
    v_B_rRenal3 = (u_B_rPeritubular-u_B_RA)/R_B_rRenal3;
    // Muscle in torso
    var q_B_musTorso: litre {init: 0.2};
    var q_B_musTorsoVein: litre {init: 0.2};
    var q_B_musTorso_us: litre {init: 0.12};
    var q_B_musTorsoVein_us: litre {init: 0.12};
    var u_B_musTorso: kPa;
    var u_B_musTorsoVein: kPa;
    var E_B_musTorso: kPa_per_L {init: 60};
    var E_B_musTorsoVein: kPa_per_L {init: 10};
    var z_musTorso: meter {init: -0.50};
    ode(q_B_musTorso, t) = v_B_musTorso1-v_B_musTorso2;
    u_B_musTorso = E_B_musTorso*(q_B_musTorso-q_B_musTorso_us)-rho*g*z_musTorso*cos(theta_rad);
    ode(q_B_musTorsoVein, t) = v_B_musTorso2-v_B_musTorso3;
    u_B_musTorsoVein = E_B_musTorsoVein*(q_B_musTorsoVein-q_B_musTorsoVein_us)-rho*g*z_musTorso*cos(theta_rad);
    var v_B_musTorso1: L_per_s;
    var v_B_musTorso2: L_per_s;
    var v_B_musTorso3: L_per_s;
    var R_B_musTorso1: kPa_s_per_L {init: 100};
    var R_B_musTorso2: kPa_s_per_L {init: 1000};
    var R_B_musTorso3: kPa_s_per_L {init: 1};
    v_B_musTorso1 = (u_B_AA-u_B_musTorso)/R_B_musTorso1;
    v_B_musTorso2 = (u_B_musTorso-u_B_musTorsoVein)/R_B_musTorso2;
    v_B_musTorso3 = (u_B_musTorsoVein-u_B_RA)/R_B_musTorso3;
    // Left arm
    var q_B_lArm: litre {init: 0.1};
    var q_B_lArmVein: litre {init: 0.1};
    var q_B_lArm_us: litre {init: 0.06};
    var q_B_lArmVein_us: litre {init: 0.06};
    var u_B_lArm: kPa;
    var u_B_lArmVein: kPa;
    var E_B_lArm: kPa_per_L {init: 150};
    var E_B_lArmVein: kPa_per_L {init: 60};
    var z_lArm: meter {init: -0.50};
    ode(q_B_lArm, t) = v_B_lArm1-v_B_lArm2;
    u_B_lArm = E_B_lArm*(q_B_lArm-q_B_lArm_us)-rho*g*z_lArm*cos(theta_rad);
    ode(q_B_lArmVein, t) = v_B_lArm2-v_B_lArm3;
    u_B_lArmVein = E_B_lArmVein*(q_B_lArmVein-q_B_lArmVein_us)-rho*g*z_lArm*cos(theta_rad);
    var v_B_lArm1: L_per_s;
    var v_B_lArm2: L_per_s;
    var v_B_lArm3: L_per_s;
    var R_B_lArm1: kPa_s_per_L {init: 100};
    var R_B_lArm2: kPa_s_per_L {init: 6000};
    var R_B_lArm3: kPa_s_per_L {init: 1};
    v_B_lArm1 = (u_B_AA-u_B_lArm)/R_B_lArm1;
    v_B_lArm2 = (u_B_lArm-u_B_lArmVein)/R_B_lArm2;
    v_B_lArm3 = (u_B_lArmVein-u_B_RA)/R_B_lArm3;
    // Right arm
    var q_B_rArm: litre {init: 0.1};
    var q_B_rArmVein: litre {init: 0.1};
    var q_B_rArm_us: litre {init: 0.06};
    var q_B_rArmVein_us: litre {init: 0.06};
    var u_B_rArm: kPa;
    var u_B_rArmVein: kPa;
    var E_B_rArm: kPa_per_L {init: 150};
    var E_B_rArmVein: kPa_per_L {init: 60};
    var z_rArm: meter {init: -0.50};
    ode(q_B_rArm, t) = v_B_rArm1-v_B_rArm2;
    u_B_rArm = E_B_rArm*(q_B_rArm-q_B_rArm_us)-rho*g*z_rArm*cos(theta_rad);
    ode(q_B_rArmVein, t) = v_B_rArm2-v_B_rArm3;
    u_B_rArmVein = E_B_rArmVein*(q_B_rArmVein-q_B_rArm_us)-rho*g*z_rArm*cos(theta_rad);
    var v_B_rArm1: L_per_s;
    var v_B_rArm2: L_per_s;
    var v_B_rArm3: L_per_s;
    var R_B_rArm1: kPa_s_per_L {init: 100};
    var R_B_rArm2: kPa_s_per_L {init: 6000};
    var R_B_rArm3: kPa_s_per_L {init: 1};
    v_B_rArm1 = (u_B_AA-u_B_rArm)/R_B_rArm1;
    v_B_rArm2 = (u_B_rArm-u_B_rArmVein)/R_B_rArm2;
    v_B_rArm3 = (u_B_rArmVein-u_B_RA)/R_B_rArm3;
    // Left leg
    var q_B_lLeg: litre {init: 0.1};
    var q_B_lLegVein: litre {init: 0.1};
    var q_B_lLeg_us: litre {init: 0.06};
    var q_B_lLegVein_us: litre {init: 0.06};
    var u_B_lLeg: kPa;
    var u_B_lLegVein: kPa;
    var E_B_lLeg: kPa_per_L {init: 150};
    var E_B_lLegVein: kPa_per_L {init: 60};
    var z_lLeg: meter {init: -0.50};
    ode(q_B_lLeg, t) = v_B_lLeg1-v_B_lLeg2;
    u_B_lLeg = E_B_lLeg*(q_B_lLeg-q_B_lLeg_us)-rho*g*z_lLeg*cos(theta_rad);
    ode(q_B_lLegVein, t) = v_B_lLeg2-v_B_lLeg3;
    u_B_lLegVein = E_B_lLegVein*(q_B_lLegVein-q_B_lLeg_us)-rho*g*z_lLeg*cos(theta_rad);
    var v_B_lLeg1: L_per_s;
    var v_B_lLeg2: L_per_s;
    var v_B_lLeg3: L_per_s;
    var R_B_lLeg1: kPa_s_per_L {init: 100};
    var R_B_lLeg2: kPa_s_per_L {init: 4000};
    var R_B_lLeg3: kPa_s_per_L {init: 1};
    v_B_lLeg1 = (u_B_AA-u_B_lLeg)/R_B_lLeg1;
    v_B_lLeg2 = (u_B_lLeg-u_B_lLegVein)/R_B_lLeg2;
    v_B_lLeg3 = (u_B_lLegVein-u_B_RA)/R_B_lLeg3;
    // Right leg
    var q_B_rLeg: litre {init: 0.1};
    var q_B_rLegVein: litre {init: 0.1};
    var q_B_rLeg_us: litre {init: 0.06};
    var q_B_rLegVein_us: litre {init: 0.06};
    var u_B_rLeg: kPa;
    var u_B_rLegVein: kPa;
    var E_B_rLeg: kPa_per_L {init: 150};
    var E_B_rLegVein: kPa_per_L {init: 60};
    var z_rLeg: meter {init: -0.50};
    ode(q_B_rLeg, t) = v_B_rLeg1-v_B_rLeg2;
    u_B_rLeg = E_B_rLeg*(q_B_rLeg-q_B_rLeg_us)-rho*g*z_rLeg*cos(theta_rad);
    ode(q_B_rLegVein, t) = v_B_rLeg2-v_B_rLeg3;
    u_B_rLegVein = E_B_rLegVein*(q_B_rLegVein-q_B_rLeg_us)-rho*g*z_rLeg*cos(theta_rad);
    var v_B_rLeg1: L_per_s;
    var v_B_rLeg2: L_per_s;
    var v_B_rLeg3: L_per_s;
    var R_B_rLeg1: kPa_s_per_L {init: 100};
    var R_B_rLeg2: kPa_s_per_L {init: 4000};
    var R_B_rLeg3: kPa_s_per_L {init: 1};
    v_B_rLeg1 = (u_B_AA-u_B_rLeg)/R_B_rLeg1;
    v_B_rLeg2 = (u_B_rLeg-u_B_rLegVein)/R_B_rLeg2;
    v_B_rLeg3 = (u_B_rLegVein-u_B_RA)/R_B_rLeg3;
    // Total volumes of blood in torso, brain, limbs and combination
    var q_B_heartTot: litre;
    var q_B_lungTot: litre;
    var q_B_renalTot: litre;
    var q_B_gutTot: litre;
    var q_B_brainTot: litre;
    var q_B_limbTot: litre;
    var q_Blood: litre;
    q_B_heartTot = q_B_LV+q_B_RV+q_B_LA+q_B_RA+q_B_AA+q_B_PA;
    q_B_lungTot = q_B_lung+q_B_pulmVein;
    q_B_renalTot = q_B_lGlomerulus+q_B_rGlomerulus+q_B_lPeritubular+q_B_rPeritubular;
    q_B_gutTot = q_B_celiac+q_B_supMes+q_B_stomach+q_B_spleen+q_B_pancreas+q_B_intestine+q_B_colon+q_B_portalVein+q_B_liver+q_B_musTorso+q_B_musTorsoVein;
    q_B_brainTot = q_B_brain+q_B_brainVein;
    q_B_limbTot = q_B_lArm+q_B_lArmVein+q_B_rArm+q_B_rArmVein+q_B_lLeg+q_B_lLegVein+q_B_rLeg+q_B_rLegVein;
    q_Blood = q_B_heartTot+q_B_lungTot+q_B_renalTot+q_B_gutTot+q_B_brainTot+q_B_limbTot;
  enddef;
enddef;
